#########################################################################################
# FanBeamModuleSide   --> # Z: +86 ~ 86+50 / 2
#
#####################################
# 6) Create a volume to attach phasespace
#####################################
# XStart(Left) : -1-2
# XEnd(LeftEnd) : -1-2-500
# ZStart : 136 - 0.001
# ZEnd : 136
/gate/world/daughters/name 	bskdetector
/gate/world/daughters/insert 	box
/gate/bskdetector/geometry/setXLength 500 mm	
/gate/bskdetector/geometry/setYLength 500 mm
/gate/bskdetector/geometry/setZLength 0.001 mm	# 1 um Vacuum
/gate/bskdetector/placement/setTranslation 	-253 0 135.9995 mm	
/gate/bskdetector/setMaterial 		Vacuum
/gate/bskdetector/vis/setColor cyan
/gate/bskdetector/vis/forceSolid

# REPEAT detector  # 6 mm gap + 500mm x
/gate/bskdetector/repeaters/insert cubicArray
/gate/bskdetector/cubicArray/setRepeatNumberX 	2
/gate/bskdetector/cubicArray/setRepeatNumberY 	1
/gate/bskdetector/cubicArray/setRepeatNumberZ   	1
/gate/bskdetector/cubicArray/setRepeatVector 		506 0 0 mm
/gate/bskdetector/cubicArray/autoCenter false
